CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (or (file does contain "FoF") (or (file does contain "_16") (file doesnot contain "cropped")))

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^FoF(?P<Field>[0-9]{1}_(?P<Date>[0-9]{6}))
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (directory does contain "A02")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^FoF(?P<Field>[0-9]{1}_(?P<Date>[0-9]{6}))_mask
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (directory does contain "A05")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'mask': 'Field', 'bright': 'Field', 'fluor_1': 'Field', 'fluor_2': 'Field'}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:1.0
    Select the rule criteria:and (file does contain "ch1")
    Name to assign these images:bright
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch0")
    Name to assign these images:fluor_1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch2")
    Name to assign these images:fluor_2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "mask")
    Name to assign these images:mask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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
    Select the input image:mask
    Name the output object:object
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

OverlayOutlines:[module_num:6|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:fluor_1
    Name the output image:fluor_1_overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FF00EC
    Select objects to display:object

OverlayOutlines:[module_num:7|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:fluor_2
    Name the output image:fluor_2_overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#39FF00
    Select objects to display:object

SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:fluor_1_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:fluor_1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Documents\\A02_3D_1_Images
    Image bit depth:No conversion
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:fluor_2_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:fluor_2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Documents\\A02_3D_1_Images
    Image bit depth:No conversion
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectIntensity:[module_num:10|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
    Select images to measure:bright, fluor_1, fluor_2
    Select objects to measure:object

MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:object
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureTexture:[module_num:12|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
    Select images to measure:bright, fluor_1, fluor_2
    Select objects to measure:object
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|/Volumes/WD Element/Collaboration/Moffitt_Noemi/BioinformaticsPaper/FUCCI-features-extraction-using-CellProfiler
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:A02_3D_10
    Overwrite existing files without warning?:Yes
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